CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Trans")
    Name to assign these images:Trans
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceEdges:[module_num:5|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
    Select the input image:Trans
    Name the output image:trans_enhanced
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:trans_enhanced
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:100
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    Thresholding method:Otsu

SaveCroppedObjects:[module_num:8|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
    Objects:Cell
    Directory:Default Input Folder sub-folder|Box Sync/SGGL/src/190408_segmentation_tests/dense
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Masks
    Image:None
