CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:DNA
    Name the objects to be identified:Cells

SaveCroppedObjects:[module_num:6|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
    Objects:Cells
    Directory:Default Output Folder sub-folder|./medium_hand
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Masks
    Image:None
